PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'%s/%s_%s_%s' % (expInfo['output folder'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'scheduler csv': 'block_scheduler.csv', 'output folder': 'Results/'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Scheduler
  keyboardBackend = ioHub
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Routines
  Routine end
    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment. Thank you!

        Press SPACE to end.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_end
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice trials. If you have any questions, please ask your experimenter now.

        Next, you will begin the real trials. These will be exactly the same, except you will no longer receive feedback.

        When you are ready, press SPACE to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
  Routine stroop_trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('black')
        if task_parameters['language'] == "english":
            word = english_word
            sound_file = sound_file_english
            key_maps = ["red", "yellow", "green", "blue"]
        elif task_parameters['language'] == "spanish":
            word = spanish_word
            sound_file = sound_file_spanish
            key_maps = ["rojo", "amarillo", "verde", "azul"]
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            stroop_trials.finished=True
      End Routine:
        if (presentation_time > presentation_time_floor) and (key_resp_stroop.corr == 1):
            presentation_time -= .1
        elif key_resp_stroop.corr == 1:
            presentation_time += .1
    TextComponent trial_text
      color [set every repeat] = $color
      font = Times New Roman
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentation_time
      text [set every repeat] = $word
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = $sound_file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentation_time
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    TextComponent text_20
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentation_time
      text [set every repeat] = $(f"{key_maps[0]}\t\t{key_maps[1]}\t\t{key_maps[2]}\t\t{key_maps[3]}")
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    KeyboardComponent key_resp_stroop
      allowedKeys = '4','5','6', '7', 'num_4', 'num_5', 'num_6', 'num_add'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine math_trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        math_correct = 0
      Begin Routine:
        win.setColor('black')
        if start_math_difficulty == 1:
            num1 = randint(1,9)
            num2 = randint(1,9)
        elif start_math_difficulty == 2:
            num1 = randint(10,99)
            num2 = randint(1,9)
        elif start_math_difficulty == 3:
            num1 = randint(10,99)
            num2 = randint(10,99)
        elif start_math_difficulty == 4:
            num1 = randint(100,999)
            num2 = randint(10,99)
        elif start_math_difficulty == 5:
            num1 = randint(100,999)
            num2 = randint(100,999)

        if answer_condition == "same":
            corr_resp = "5"
            if trial_sign == "addition":
                sign = "+"
                answer = num1 + num2
            elif trial_sign == "subtraction":
                sign = "-"
                answer = num1 - num2
        elif answer_condition == "different":
            corr_resp = "6"
            if trial_sign == "addition":
                sign = "+"
                answer = num1 + randint(1,9) - num2 + randint(1,9)
            elif trial_sign == "subtraction":
                sign = "-"
                answer = num1 + randint(1,9) - num2 + randint(1,9)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            math_trials.finished=True
      End Routine:
        if (key_resp_math.corr == 1) and (start_math_difficulty < 5):
            start_math_difficulty += 1
        elif (key_resp_math.corr == 0) and (start_math_difficulty > 1):
            start_math_difficulty -= 1
    TextComponent text
      letterHeight = 0.15
      pos = (.1, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $math_num_dur
      text [set every repeat] = $num1
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    TextComponent text_2
      letterHeight = 0.15
      pos = (.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $math_num_dur
      text [set every repeat] = $num2
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    TextComponent text_3
      letterHeight = 0.15
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $math_num_dur
      text [set every repeat] = $sign
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    TextComponent text_15
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = $(math_num_dur + equal_delay)
      stopVal [duration (s)] = $equal_dur
      text = =
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    TextComponent text_13
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = $(math_num_dur + equal_delay + equal_dur + math_answer_delay)
      stopVal [duration (s)] = $math_answer_dur
      text [set every repeat] = $answer
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    KeyboardComponent key_resp_math
      allowedKeys = '5','6'
      correctAns = $corr_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = $(math_num_dur + equal_delay + equal_dur + math_answer_delay)
      storeCorrect = True
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  Routine stroop_practice
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print(task_parameters)
        if task_parameters['language'] == "english":
            word = english_word
            sound_file = sound_file_english
            key_maps = ["red", "green", "blue", "yellow"]
        elif task_parameters['language'] == "spanish":
            word = spanish_word
            sound_file = sound_file_spanish
            key_maps = ["rojo", "verde", "azul", "amarillo"]
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            stroop_practice_trials.finished=True
      End Routine:
        if (presentation_time > .2) and (key_resp_stroop_prac.corr == 1):
            presentation_time -= .1
        elif key_resp_stroop_prac.corr == 1:
            presentation_time += .1
    TextComponent stroop_practice_text
      color [set every repeat] = $color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $presentation_time
      text [set every repeat] = $word
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    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $sound_file
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_stroop_prac
      allowedKeys = 'r','g','b'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_16
      letterHeight = 0.05
      pos = (-1.5, -3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $key_maps[0]
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    TextComponent text_17
      letterHeight = 0.05
      pos = (-.5, -3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $key_maps[1]
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    TextComponent text_18
      letterHeight = 0.05
      pos = (.5, -3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $key_maps[1]
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    TextComponent text_19
      letterHeight = 0.05
      pos = (1.5, -3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $key_maps[1]
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  Routine stroop_instructions
    TextComponent stroop_instruct_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your instructions go here.

        During the trial, you will see a word in the center of the screen. Your job is to indicate the color that word is printed in by pressing the corresponding key.

        If the color of the word is RED, press the R key.
        If the color of the word is GREEN, press the G key.
        If the color of the word is BLUE, press the B key.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine math_practice
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        math_correct = 0
      Begin Routine:
        if start_math_difficulty == 1:
            num1 = randint(1,9)
            num2 = randint(1,9)
        elif start_math_difficulty == 2:
            num1 = randint(10,99)
            num2 = randint(1,9)
        elif start_math_difficulty == 3:
            num1 = randint(10,99)
            num2 = randint(10,99)
        elif start_math_difficulty == 4:
            num1 = randint(100,999)
            num2 = randint(10,99)
        elif start_math_difficulty == 5:
            num1 = randint(100,999)
            num2 = randint(100,999)

        if answer_condition == "same":
            corr_resp = "5"
            if trial_sign == "addition":
                sign = "+"
                answer = num1 + num2
            elif trial_sign == "subtraction":
                sign = "-"
                answer = num1 - num2
        elif answer_condition == "different":
            corr_resp = "6"
            if trial_sign == "addition":
                sign = "+"
                answer = num1 + randint(1,9) - num2 + randint(1,9)
            elif trial_sign == "subtraction":
                sign = "-"
                answer = num1 + randint(1,9) - num2 + randint(1,9)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            math_practice_trials.finished=True
      End Routine:
        if (key_resp_6.corr == 1) and (start_math_difficulty < 5):
            math_correct = 1
            start_math_difficulty += 1
        elif (key_resp_6.corr == 0) and (start_math_difficulty > 1):
            math_correct = 0
            start_math_difficulty -= 1
    TextComponent text_4
      letterHeight = 0.1
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $num1
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    TextComponent text_6
      letterHeight = 0.1
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $num2
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    TextComponent text_8
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $sign
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    TextComponent text_14
      letterHeight = 0.1
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = _
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $answer
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    KeyboardComponent key_resp_6
      allowedKeys = '5','6'
      correctAns = $corr_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.5
      storeCorrect = True
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    ParallelOutComponent p_port_x_send_3
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopData = end_trigger
      stopVal [condition] = (textbox_2.text != '') and (thisKey.name == 'return')
      syncScreen = True
      syncScreenRefresh = False
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  Routine math_feedback
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if math_correct == 1:
            msg = "Correct!"
        else:
            msg = "Incorrect."
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            math_practice_trials.finished=True
    TextComponent feedback_text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent exp_monitor
      Code Type = Py
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      Begin Experiment:
        import tkinter as tk
        import threading
        import tkinter.font as tkFont
        import tkinter.ttk as ttk
        import asyncio
        import websockets
        from psychopy.hardware import keyboard
        from psychopy import core
        import pandas as pd

        # create shared lock
        current_selection = 0
        force_end_routine = False
        pause_routine = True
        lock = threading.Lock()
        timer = None

        scheduler_csv_data = pd.read_csv(expInfo['scheduler csv'])
        sched_header = list(scheduler_csv_data.columns)
        sched_list = scheduler_csv_data.values.tolist()

        class MainApplication(tk.Frame):
            def __init__(self, parent, current_selection, pause_routine, *args, **kwargs):
                tk.Frame.__init__(self, parent, *args, **kwargs)
                self.parent = parent
                #setting title
                parent.title("Experiment Scheduler")
                #setting window size
                self.started = False # turned on after start
                width=800
                height=500
                #width=1000
                #height=800
                self.width = width
                self.height = height
                screenwidth = self.winfo_screenwidth()
                screenheight = self.winfo_screenheight()
                alignstr = '%dx%d+%d+%d' % (width, height, -screenwidth/2, (screenheight - height) / 2 + 40)
                #alignstr = '%dx%d+%d+%d' % (width, height, screenwidth/2, (screenheight - height) / 2)
                parent.geometry(alignstr)
                parent.resizable(width=False, height=False)

                self.selection = current_selection
                self.pause_routine = pause_routine
                self.countdown_params = None

                self.counter = tk.Label(self,font=(None, 15),bg= "gray90")
                self.counter.place(x=width//30,y=height//3.5,width=width//8.6,height=height//20)
                self.countdown(5,method='up',selection=current_selection)

                self.UpButton=tk.Button(self,state='disabled')
                self.UpButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.UpButton["font"] = ft
                self.UpButton["fg"] = "#000000"
                self.UpButton["justify"] = "center"
                self.UpButton["text"] = "Previous"
                self.UpButton.place(x=width//30,y=height//2.5,width=width//8.6,height=height//20)
                self.UpButton["command"] = self.UpButton_command

                self.DownButton=tk.Button(self,state='disabled')
                self.DownButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.DownButton["font"] = ft
                self.DownButton["fg"] = "#000000"
                self.DownButton["justify"] = "center"
                self.DownButton["text"] = "Next"
                self.DownButton.place(x=width//30,y=height//2.08,width=width//8.6,height=height//20)
                self.DownButton["command"] = self.DownButton_command

                self.StartButton=tk.Button(self)
                self.StartButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.StartButton["font"] = ft
                self.StartButton["fg"] = "#000000"
                self.StartButton["justify"] = "center"
                self.StartButton["text"] = "Start"
                self.StartButton.place(x=width//4.5,y=height//5.56,width=width//8.6,height=height//20)
                self.StartButton["command"] = self.StartButton_command

                self.PauseButton=tk.Button(self)
                self.PauseButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.PauseButton["font"] = ft
                self.PauseButton["fg"] = "#000000"
                self.PauseButton["justify"] = "center"
                self.PauseButton["text"] = "Pause"
                self.PauseButton.place(x=width//1.5,y=height//5.56,width=width//8.6,height=height//20)
                self.PauseButton["command"] = self.PauseButton_command

                self.tree = None
                self._setup_widgets()
                self._build_tree()


                self.tree.focus_set()
                self.children = self.tree.get_children()
                if self.children:
                    self.tree.focus(self.children[self.selection])
                    self.tree.selection_set(self.children[self.selection])

                thd_as = threading.Thread(target=self.run_asyncio_server)   # gui thread
                thd_as.daemon = True  # background thread will exit if main thread exits
                thd_as.start()  # start tk loop

            def countdown(self, count, selection, method='down',set_color=True):
                # ensure we need to continue counting
                if self.pause_routine:
                    self.counter['text'] = 'PAUSED'
                    return
                if selection != self.selection:
                    return
                # change text in label
                self.counter['text'] = "{:.2f}".format(count)
                if method=='down' and count > 0:
                    if set_color:
                        self.counter.config(fg="red")
                    # call countdown again after 10ms
                    self.parent.after(10, self.countdown, round(count-.01,2), selection, method,False)
                elif method=='up':
                    if set_color:
                        self.counter.config(fg="blue")
                    # call countdown again after 10ms
                    self.parent.after(10, self.countdown, round(count+.01,2), selection, method,False)

            def run_asyncio_server(self):
                async def handler(websocket, path):
                    data = await websocket.recv()
                    if data=='next':
                        self.move_focus_down()
                    elif data=='last':
                        self.move_focus_up()
                    reply = f"Data recieved bro as:  {data} selection {self.selection}!"
                    await websocket.send(reply)
                loop = asyncio.new_event_loop()
                asyncio.set_event_loop(loop)
                start_server = websockets.serve(handler, "localhost", 8000)
                asyncio.get_event_loop().run_until_complete(start_server)
                asyncio.get_event_loop().run_forever()

            def move_focus_down(self):
                if len(self.children)-1 == self.selection: # reset
                    return
                last_selection = self.selection
                self.selection += 1
                if self.children and len(self.children) > self.selection:
                    self.tree.focus(self.children[self.selection])
                    self.tree.selection_set(self.children[self.selection])

                this_child = self.tree.item(self.children[self.selection])["values"]
                method = 'up' if float(this_child[2]) == 0 else 'down'
                self.countdown_params = (float(this_child[2]), self.selection, method)
                self.countdown(float(this_child[2]),selection=self.selection,method=method)
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if last_selection != self.selection:
                        force_end_routine = True
                    current_selection = self.selection

            def move_focus_up(self):
                if self.selection == 0: # if we hit the start
                    return

                last_selection = self.selection
                self.selection -= 1
                if self.children and self.selection >= 0:
                    self.tree.focus(self.children[self.selection])
                    self.tree.selection_set(self.children[self.selection])
                #if self.selection == -1: # reset
                    # self.selection = len(self.children)-1
                this_child = self.tree.item(self.children[self.selection])["values"]
                method = 'up' if float(this_child[2]) == 0 else 'down'
                self.countdown_params = (float(this_child[2]), self.selection, method)
                self.countdown(float(this_child[2]),selection=self.selection,method=method)
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if last_selection != self.selection:
                        force_end_routine = True
                    current_selection = self.selection

            def _setup_widgets(self):
                s = """\click on header to sort by that column
                    to change width of column drag boundary
                    """
                # msg = ttk.Label(wraplength="4i", justify="left", anchor="n",
                #    padding=(10, 2, 10, 6), text=s)
                #msg.pack(fill='x')
                container = ttk.Frame()
                # container.pack(fill='both', expand=True)
                container.place(x=self.width//4.6,y=self.height//3.57,width=self.width//1.4,height=self.height//1.5)
                # create a treeview with dual scrollbars
                self.tree = ttk.Treeview(columns=sched_header, show="headings", selectmode='none')
                vsb = ttk.Scrollbar(orient="vertical",
                    command=self.tree.yview)
                hsb = ttk.Scrollbar(orient="horizontal",
                    command=self.tree.xview)
                self.tree.configure(yscrollcommand=vsb.set,
                    xscrollcommand=hsb.set)
                self.tree.grid(column=0, row=0, sticky='nsew', in_=container)
                vsb.grid(column=1, row=0, sticky='ns', in_=container)
                hsb.grid(column=0, row=1, sticky='ew', in_=container)
                container.grid_columnconfigure(0, weight=1)
                container.grid_rowconfigure(0, weight=1)

            def _build_tree(self):
                for col in sched_header:
                    self.tree.heading(col, text=col.title())
                    # adjust the column's width to the header string
                    self.tree.column(col,
                        width=tkFont.Font().measure(col.title()))

                for item in sched_list:
                    self.tree.insert('', 'end', values=item)
                    # adjust column's width if necessary to fit each value
                    for ix, val in enumerate(item):
                        col_w = tkFont.Font().measure(val)
                        if self.tree.column(sched_header[ix],width=None)<col_w:
                            self.tree.column(sched_header[ix], width=col_w)

            def UpButton_command(self):
                if self.started:
                    self.move_focus_up()


            def DownButton_command(self):
                if self.started:
                    self.move_focus_down()


            def StartButton_command(self):
                if not self.started:
                    self.started = True
                    self.UpButton['state'] = 'normal'
                    self.DownButton['state'] = 'normal'
                    self.StartButton['state'] = 'disabled'
                    this_child = self.tree.item(self.children[self.selection])["values"]
                    method = 'up' if float(this_child[2]) == 0 else 'down'
                    self.countdown_params = (float(this_child[2]), self.selection, method)
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if self.pause_routine:
                        self.pause_routine = False
                        self.PauseButton['state'] = 'normal'
                        self.StartButton['state'] = 'disabled'
                        self.countdown(self.countdown_params[0],selection=self.countdown_params[1],method=self.countdown_params[2])
                    pause_routine = self.pause_routine


            def PauseButton_command(self):
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if not self.pause_routine:
                        self.pause_routine = True
                        force_end_routine = True # this may be changed depending on preferred pause behavior
                        self.StartButton['state'] = 'normal'
                        self.PauseButton['state'] = 'disabled'
                    pause_routine = self.pause_routine

        def runtk(current_selection, pause_routine):  # runs in background thread
            root = tk.Tk()
            MainApplication(root, current_selection, pause_routine).pack(side="top", fill="both", expand=True)
            root.mainloop()

        thd = threading.Thread(target=runtk, args=(current_selection,pause_routine,))   # gui thread
        thd.daemon = True  # background thread will exit if main thread exits
        thd.start()  # start tk loop
      Each Frame:
        if not pause_routine:
            continueRoutine=False
    CodeComponent exp_setup
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core
        import time

        presentation_time = 1 # seconds
        presentation_time_floor = .5
        math_num_dur = 1
        equal_delay = .3
        equal_dur = 1
        math_answer_delay = .5
        math_answer_dur = 1
        start_math_difficulty = 1

        math_num_dur + equal_delay + equal_dur + math_answer_delay
    KeyboardComponent key_resp
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent setup_waiter
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine print_row
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Test + $experiment_conditions
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine parse_scheduler_row
    CodeComponent code_7
      Code Type = Py
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      Before Experiment:
        import ast
      Each Frame:
        if not pause_routine:
            continueRoutine=False
      End Routine:
        force_end_routine = False

        for key,val in scheduler_csv_data.iloc[current_selection].items():
                exec(key + '=val')

        if str(task_parameters) != 'nan':
            task_parameters = ast.literal_eval(task_parameters)
        else:
            task_parameters = {}
    TextComponent parse_waiter
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin_timer
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
  Routine start_routine_trigger
    ParallelOutComponent p_port_x_send_5
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine end_routine_trigger
    ParallelOutComponent p_port_x_send_8
      address = 0x3FF8
      disabled = True
      register = EIO
      startData = end_trigger
      startVal [time (s)] = 0
      stopVal [duration (s)] = .01
      syncScreen = True
      syncScreenRefresh = False
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  Routine increment_selection
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        import asyncio
        import websockets

        async def increment():
            async with websockets.connect('ws://localhost:8000') as websocket:
                await websocket.send("next")
                response = await websocket.recv()
                print(response)
        if not force_end_routine and not pause_routine: # if user didn't give input
            asyncio.get_event_loop().run_until_complete(increment())
  Routine stroop_feedback
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if key_resp_stroop.corr == 1:
            msg = "correct"
        else:
            msg = f"incorrect"

        bg_colors = ["red", "blue", "green"]
        shuffle(bg_colors)
        win.setColor(bg_colors[0])
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            stroop_trials.finished=True
      End Routine:
        win.setColor('black')
    TextComponent feedback_text_3
      font = Times New Roman
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine acquisition_end
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            acq_end.finished=True
    TextComponent acquisition_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = timer.getTime() <= -.01
      text [set every frame] = $str(round(timer.getTime(),2)) + '\n' + "Acquisition ending"
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  Routine acquisition_start
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            acq_start.finished=True
    TextComponent acq_start_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $str(round(timer.getTime(),2)) + '\n' + "Acquisition starting"
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  Routine end_experiment
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
  Routine wait
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
      Each Frame:
        if force_end_routine and duration==0:
            continueRoutine=False
            wait_block.finished=True
        elif duration > 0 and (force_end_routine or timer.getTime() <= 0):
            continueRoutine=False
            wait_block.finished=True
    TextComponent wait_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting for experimenter
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    KeyboardComponent key_resp_stop_wait
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $expInfo['scheduler csv']
    loopType = sequential
    nReps = 999
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    Routine parse_scheduler_row
    LoopInitiator acq_start loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='acq_start'])
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      Routine start_routine_trigger
      Routine acquisition_start
      Routine end_routine_trigger
    LoopTerminator acq_start
    LoopInitiator acq_end loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='acq_end'])
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      Routine start_routine_trigger
      Routine acquisition_end
      Routine end_routine_trigger
      Routine end_experiment
    LoopTerminator acq_end
    LoopInitiator wait_block loopType="TrialHandler"
      loopType = sequential
      nReps = sum([task_type=='wait'])
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      Routine start_routine_trigger
      Routine wait
      Routine end_routine_trigger
    LoopTerminator wait_block
    LoopInitiator stroop_practice_block loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='stroop_practice'])
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      Routine stroop_instructions
      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator stroop_practice_trials loopType="TrialHandler"
        conditionsFile = routine_conditions/stroop_stim.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('english_word', 'RED'), ('spanish_word', 'ROJO'), ('color', 'red'), ('color_congruency', 'congruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/red.wav'), ('sound_file_spanish', 'audio_files/rojo.wav')]),
          OrderedDict([('english_word', 'GREEN'), ('spanish_word', 'VERDE'), ('color', 'red'), ('color_congruency', 'incongruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/green.wav'), ('sound_file_spanish', 'audio_files/verde.wav')]),
          OrderedDict([('english_word', 'BLUE'), ('spanish_word', 'AZUL'), ('color', 'red'), ('color_congruency', 'incongruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/blue.wav'), ('sound_file_spanish', 'audio_files/azul.wav')]),
          OrderedDict([('english_word', 'YELLOW'), ('spanish_word', 'AMARILLO'), ('color', 'red'), ('color_congruency', 'incongruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/yellow.wav'), ('sound_file_spanish', 'audio_files/amarillo.wav')]),
          OrderedDict([('english_word', 'RED'), ('spanish_word', 'ROJO'), ('color', 'green'), ('color_congruency', 'incongruent'), ('corr_ans', 6), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/red.wav'), ('sound_file_spanish', 'audio_files/rojo.wav')])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
        Routine stroop_trial
        Routine stroop_feedback
      LoopTerminator stroop_practice_trials
      Routine end_routine_trigger
      Routine practice_end
    LoopTerminator stroop_practice_block
    LoopInitiator stroop loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='stroop'])
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      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator stroop_trials loopType="TrialHandler"
        conditionsFile = routine_conditions/stroop_stim.csv
        loopType = random
        nReps = 10000
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        conditions:
          [OrderedDict([('english_word', 'RED'), ('spanish_word', 'ROJO'), ('color', 'red'), ('color_congruency', 'congruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/red.wav'), ('sound_file_spanish', 'audio_files/rojo.wav')]),
          OrderedDict([('english_word', 'GREEN'), ('spanish_word', 'VERDE'), ('color', 'red'), ('color_congruency', 'incongruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/green.wav'), ('sound_file_spanish', 'audio_files/verde.wav')]),
          OrderedDict([('english_word', 'BLUE'), ('spanish_word', 'AZUL'), ('color', 'red'), ('color_congruency', 'incongruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/blue.wav'), ('sound_file_spanish', 'audio_files/azul.wav')]),
          OrderedDict([('english_word', 'YELLOW'), ('spanish_word', 'AMARILLO'), ('color', 'red'), ('color_congruency', 'incongruent'), ('corr_ans', 4), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/yellow.wav'), ('sound_file_spanish', 'audio_files/amarillo.wav')]),
          OrderedDict([('english_word', 'RED'), ('spanish_word', 'ROJO'), ('color', 'green'), ('color_congruency', 'incongruent'), ('corr_ans', 6), ('sound_congruency', 'congruent_text'), ('sound_file_english', 'audio_files/red.wav'), ('sound_file_spanish', 'audio_files/rojo.wav')])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
        Routine stroop_trial
        Routine stroop_feedback
      LoopTerminator stroop_trials
      Routine end_routine_trigger
    LoopTerminator stroop
    LoopInitiator math_practice_block loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='math_practice'])
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      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator math_practice_trials loopType="TrialHandler"
        conditionsFile = routine_conditions/math_stim.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('trial_sign', 'addition'), ('answer_condition', 'same')]),
          OrderedDict([('trial_sign', 'subtraction'), ('answer_condition', 'same')]),
          OrderedDict([('trial_sign', 'addition'), ('answer_condition', 'different')]),
          OrderedDict([('trial_sign', 'subtraction'), ('answer_condition', 'different')])]
        Routine math_trial
        Routine math_feedback
      LoopTerminator math_practice_trials
      Routine end_routine_trigger
    LoopTerminator math_practice_block
    LoopInitiator math loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='math'])
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      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator math_trials loopType="TrialHandler"
        conditionsFile = routine_conditions/math_stim.csv
        loopType = random
        nReps = 10000
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        conditions:
          [OrderedDict([('trial_sign', 'addition'), ('answer_condition', 'same')]),
          OrderedDict([('trial_sign', 'subtraction'), ('answer_condition', 'same')]),
          OrderedDict([('trial_sign', 'addition'), ('answer_condition', 'different')]),
          OrderedDict([('trial_sign', 'subtraction'), ('answer_condition', 'different')])]
        Routine math_trial
      LoopTerminator math_trials
      Routine end_routine_trigger
    LoopTerminator math
    Routine increment_selection
  LoopTerminator trials
  Routine end
